PsychoPy2experiment version="2022.1.3"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'language': 'English', 'LPTport': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  expName = Resting_EEG
  keyboardBackend = ioHub
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Routines
  Routine Instruction_resting_EEG
    CodeComponent code_init
      Code Type = Both
      Before Experiment:
        # CODE SNIPPET TO DISPLAY AVAILABLE LANGUAGES
        # UNFORTUNATELY DOESN'T WORK WITH PSYCHOPY'S
        # DEFAULT DIALOGUE BOX

        #import os
        ## Check which directories are in the Languages
        ## folder
        #directory = './Languages'
        #available_languages = [f[1] for f in os.walk(directory)][0]
        #disp_languages = ', '.join(available_languages)
      Begin Experiment:
        import pandas
        import random
        # Read in instruction from instruction file
        fname = './Languages/' + expInfo['language'] + '/Instruction.xlsx'
        instruction = pandas.read_excel(fname).iloc[0, 0]

        # Define condition
        condition = str(random.randint(1, 2))
      Begin JS Routine:
        new psychoJS.eventManager.Mouse({"visible": false});
      Begin Routine:
        event.Mouse(visible=False)
    SoundComponent sound_instruct
      disabled = True
      sound [set every repeat] = $'Languages/' + expInfo['language'] + '/Instruction_experiment.wav'
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 50
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    TextComponent text_instruct
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction
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    KeyboardComponent key_resp_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
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  Routine Start_resting_EEG
    SoundComponent sound_start_recording
      sound [set every repeat] = $'Languages/' + expInfo['language'] + '/Instruction_start_recording.wav'
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    TextComponent emptyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine Trial
    CodeComponent code_triggers
      Code Type = Py
      Begin Routine:
        if int(condition) == 1:
            Trigger = 253
        elif int(condition) == 2:
            Trigger = 254
    SoundComponent sound_trial
      sound [set every repeat] = $'Languages/' + expInfo['language'] + '/' + Instruction_trials
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ParallelOutComponent lpt_port
      address = 0x0378
      register = EIO
      startData = $Trigger
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.015
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent fixation_cross
      letterHeight = 2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 63.0
      text = +
      units = cm
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  Routine End_resting_EEG
    SoundComponent sound_end_recording
      sound [set every repeat] = $'Languages/' + expInfo['language'] + '/Instruction_end_recording.wav'
      startVal [time (s)] = 6
      stopVal [duration (s)] = 9
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Flow
  Routine Instruction_resting_EEG
  Routine Start_resting_EEG
  LoopInitiator Resting_trials loopType="TrialHandler"
    conditionsFile = $'Cond' + condition + '_Resting_EEG_trials.xlsx'
    loopType = sequential
    nReps = 1
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    Routine Trial
  LoopTerminator Resting_trials
  Routine End_resting_EEG
